PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine WelcomeScreen
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        (Ethics)
        (Important Information)
    ButtonComponent WelcomeContinueButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Click to continue
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  Routine ConditionSelection
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    TextComponent ConditionSelectionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Click the button below that corresponds to the condition you were assigned. If you are not sure, please ask the experimenter.
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    ButtonComponent Condition1Button
      bold = True
      callback = VideoInstructionsText.setText("Please take out your phone and go the Instagram account @[Account Name]\n Please watch every video in order from top to bottom with the volume on. You must finish each video before scrolling to the next and only watch each video once.\n Click continue when you are finished!")
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent Condition2Button
      bold = True
      callback = VideoInstructionsText.setText("Please take out your phone and go to the YouTube channel @[Channel Name]\n You should watch the video [Video Name] in fullscreen with the volume on until it is complete.\n Click continue when you are finished.")
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = 2
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  Routine ScreenshotOrderTask
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    ImageComponent ScreenshotLeft
      image [set every repeat] = $f"Screenshots/{Condition1New}"
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent ScreenshotRight
      image [set every repeat] = $f"Screenshots/{Condition1Old}"
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = ScreenshotLeft
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine WordListStudy
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    TextComponent WordListStudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $FirstList
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  Routine WordListInstructions
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    TextComponent WordListInstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will now be shown a number of different words.
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    ButtonComponent WordListInstructionsContinueButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Click to continue
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  Routine WordListTest
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  Routine BreakOrFinish
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  Routine VideoInstructions
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    TextComponent VideoInstructionsText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent VideoInstructionsContinueButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0
      text = Click to continue
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  Routine WordListDistraction
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    TextComponent WordListDistractionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent RandomDistractionNumber
      Code Type = Auto->JS
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      Begin Experiment:
        WordListDistractionText.setText(f"Count backwards by 3 from {randint(100,1000)} out loud")
Flow
  Routine WelcomeScreen
  Routine ConditionSelection
  LoopInitiator WithinSubjects loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine VideoInstructions
    LoopInitiator ScreenshotOrderTrial loopType="TrialHandler"
      conditionsFile = screenshotspreadsheet.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Condition1New', 'new1.png'), ('Condition1Old', 'old1.png')]),
        OrderedDict([('Condition1New', 'new2.png'), ('Condition1Old', 'old2.png')])]
      Routine ScreenshotOrderTask
    LoopTerminator ScreenshotOrderTrial
    Routine WordListInstructions
    LoopInitiator WordListTrial loopType="TrialHandler"
      conditionsFile = wordlistspreadsheets.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('FirstList', 'apple'), ('SecondList', 'banana')]),
        OrderedDict([('FirstList', 'muffin'), ('SecondList', 'cupcake')]),
        OrderedDict([('FirstList', 'orange'), ('SecondList', 'tangerine')]),
        OrderedDict([('FirstList', 'cat'), ('SecondList', 'dog')]),
        OrderedDict([('FirstList', 'pizza'), ('SecondList', 'beer')])]
      Routine WordListStudy
    LoopTerminator WordListTrial
    Routine WordListDistraction
    Routine WordListTest
    Routine BreakOrFinish
  LoopTerminator WithinSubjects
